PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = black
  expName = classification_task
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Routines
  Routine trial
    ImageComponent image
      image = data/bg.png
      pos = (0.015, 0)
      size = (1.25, 0.9)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'a','s','d'
      correctAns = $para.VESSEL_MAP[vessel]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent lookup_table
      color = green
      font = "Lucida Console"
      letterHeight = 0.025
      pos = (0.65, 0.0)
      startVal [time (s)] = 0.0
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      text:
        <insert lookup text here>

        <Friend frequencies>

        <Foe frequencies>

        0123456789
    CodeComponent bands
      Code Type = JS
      Before JS Experiment:
        // Random util functions that don't fit elsewhere
        import * as jl from "./src/johnlib.js"
        // Generative functions (trials orders, line positions, etc)
        import * as gen from "./src/generate.js"
        // Band objects
        import * as band from "./src/band.js"
        // Inital parameters
        import * as para from "./src/para.js"
      Begin JS Experiment:
        // set text align
        lookup_table.setAlignHoriz('left')

        //psychoJS.window._renderer.roundPixels = true;

        bands = [
            new band.Band(
                psychoJS.window,
                [0.0, 0.24], // pos
                [para.WIDTH, 0.2], // size
                para.VESSEL_SIGNATURES[0][0],
                jl.repeat(1, para.N_LINES),
                para.NTICKS_TOP,  para.BAND_RANGES[0],
            ),
            new band.Band(
                psychoJS.window,
                [0.0, -0.17], // pos
                [para.WIDTH, 0.2], // size
                para.VESSEL_SIGNATURES[0][1],
                jl.repeat(1, para.N_LINES),
                para.NTICKS_BOTTOM,
                para.BAND_RANGES[1],
            )
        ];

        psychoJS.experiment.addData('practice_signatures_friend', para.PRACTICE_SIGNATURES[0]);
        psychoJS.experiment.addData('practice_signatures_foe', para.PRACTICE_SIGNATURES[1]);

        psychoJS.experiment.addData('signatures_friend', para.VESSEL_SIGNATURES[0]);
        psychoJS.experiment.addData('signatures_foe', para.VESSEL_SIGNATURES[1]);

        psychoJS.experiment.addData('band_ranges_top', para.BAND_RANGES[0]);
        psychoJS.experiment.addData('band_ranges_bottom', para.BAND_RANGES[1]);
      Begin JS Routine:
        image.setAutoDraw(true);

        bands[active_band].setLines(lines, is_signal);

        var lookup = para.LOOKUP_TEXT[0][active_band] + '\n' + para.LOOKUP_TEXT[1][active_band];
        switch(phase) {
            case 0: // PRACTICE PHASE
                lookup = para.PRACTICE_LOOKUP_TEXT[0][active_band] + '\n' + para.PRACTICE_LOOKUP_TEXT[1][active_band];
                break;
            case 1: // BASELINE PHASE
                break;
            case 2: // TRAINING PHASE
                lookup = "";
                bands[para.HIGHLIGHT].setHighlight(true, vessel);
                bands[para.LOWLIGHT].setLowlight(true);
                break;
            case 3: // TEST PHASE
                lookup = "";
                break;
        }

        // Set active band
        for(var i = 0; i < bands.length; i++) {
            let band = bands[i];
            band.active = active_band == i;
            band.rectangle.opacity = 1.0 - band.active;
            band.rectangle._needUpdate = true;
            band.setAutoDraw(true);
        }

        lookup_table.text = lookup;
      Each JS Frame:
        // Update uniforms
        for(var i = 0; i < bands.length; i++) {
            var band = bands[i];
            band.uniforms.frameN = frameN;
        }
      End JS Routine:
        image.setAutoDraw(false);
        for(var i = 0; i < bands.length; i++) {
            let band = bands[i];
            band.active = false;
            band.setAutoDraw(false);
        }
        if (key_resp.corr) {
            feedback_text.text = "Correct";
        } else {
            feedback_text.text = "Incorrect";
        }

        switch(phase) {
            case 0: // PRACTICE PHASE
                break;
            case 1: // BASELINE PHASE
                break;
            case 2: // TRAINING PHASE
                bands[para.HIGHLIGHT].setHighlight(false);
                bands[para.LOWLIGHT].setLowlight(false);
                break;
            case 3: // TEST PHASE
                feedback_text.text = ""; // No feedback on test
                break;
        }

        // For some reason it can't add array data automatically
        psychoJS.experiment.addData('lines_presented', lines);
        psychoJS.experiment.addData('is_signal_presented', is_signal);
  Routine feedback
    TextComponent feedback_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = good work!
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  Routine intro
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome. This is the intro text, which will contain useful information on a future date.

        Please press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine outro
    TextComponent outro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent phase_init_code
      Code Type = JS
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      Begin JS Routine:
        instructions_text.text = para.instructions[phase];
        debrief_text.text = para.debrief[phase];
  Routine debrief
    TextComponent debrief_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = <Phase-specific debrief text goes here>
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator phases loopType="TrialHandler"
    conditionsFile = $para.PHASES
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $para.RUN_ORDER[phase]
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine debrief
  LoopTerminator phases
  Routine outro
